PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Posner
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        target_stim = ['images/green_alien.png', 'images/red_alien.png']

        shuffle(target_stim)

        t_image = target_stim[0]

        thisExp.addData('Target image', t_image)
        # thisExp is part of the experiment handler
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    ImageComponent rocket_image
      image = images/rocket.png
      ori [set every repeat] = cue_ori
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.500
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    ImageComponent target
      image [set every repeat] = $t_image
      pos [set every repeat] = (target_x, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.6
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    KeyboardComponent Target_response
      allowedKeys = 'y','n','left','right','space'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      storeCorrect = True
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  Routine Instructions_
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    TextComponent inst_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the button associated with the side the target is on. 
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    KeyboardComponent start_response
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if Target_response.corr == 1:
            fb_image_stim = 'images/star.png'
        else:
            fb_image_stim = 'images/asteroid.png'
    ImageComponent fb_image
      image [set every repeat] = $fb_image_stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine Instructions_
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = spreadsheets/blocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'block_file': 'spreadsheets/green_alien_block.xlsx'},
      {'block_file': 'spreadsheets/red_alien_block.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block_file 
      loopType = random
      nReps = 2
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      conditions:
        [{'target_image': 'images/green_alien.png', 'cue_ori': 90, 'target_x': -0.5, 'condition': 'incongruent', 'answer': 'left'},
        {'target_image': 'images/green_alien.png', 'cue_ori': 270, 'target_x': 0.5, 'condition': 'incongruent', 'answer': 'right'},
        {'target_image': 'images/green_alien.png', 'cue_ori': 90, 'target_x': 0.5, 'condition': 'congruent', 'answer': 'right'},
        {'target_image': 'images/green_alien.png', 'cue_ori': 270, 'target_x': -0.5, 'condition': 'congruent', 'answer': 'left'}]
      Routine trial
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
